---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "no"
set title "Positive/Negative_Creative/Not creative"
set synth_backend "legacy"
set subject_parity "even"
set subject_nr 0
set start "Positive_Negative_Professions"
set sampler_backend "legacy"
set mouse_backend "xpyriment"
set keyboard_backend "legacy"
set height 768
set foreground "black"
set font_size 21
set font_italic "no"
set font_family "sans"
set font_bold "no"
set description "Default description"
set coordinates "relative"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "xpyriment"
set bidi "no"
set background "white"

define sketchpad CreativeNotCreative_Demo
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to begin." x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="The face will appear here" x=0 y=0 z_index=0

define feedback CreativeNotCreative_Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your average response time was [avg_rt]ms" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue." x=0 y=160 z_index=0

define sketchpad CreativeNotCreative_Fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-192 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad CreativeNotCreative_Instructions
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="In this part, you will see pictures and be asked to label their race." x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="This task requires that you classify items as quickly as you can while making as few mistakes as possible." x=0 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="AFRICAN AMERICAN" x=-262 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="EUROPEAN AMERICAN" x=-262 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Press Enter to Begin." x=0 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Two labels at the top will tell you which words go with each key." x=0 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="To classify a person as EUROPEAN AMERICAN, press the 'z' key." x=0 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="To classify a word as AFRICAN AMERICAN, press the '/' key." x=0 y=192 z_index=0
	draw image center=1 file="bf1.jpg" scale=1 show_if=always x=0 y=-64 z_index=0
	draw image center=1 file="wf1.jpg" scale=1 show_if=always x=0 y=64 z_index=0

define keyboard_response CreativeNotCreative_Keyboard
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define loop CreativeNotCreative_Loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "CreativeNotCreative_Seq"
	set description "Repeatedly runs another item"
	set cycles 12
	set column_order "correct_response;creativenotcreative"
	set break_if "never"
	setcycle 0 correct_response "z"
	setcycle 0 creativenotcreative "wf1.jpg"
	setcycle 1 correct_response "z"
	setcycle 1 creativenotcreative "wf2.jpg"
	setcycle 2 correct_response "z"
	setcycle 2 creativenotcreative "wf3.jpg"
	setcycle 3 correct_response "z"
	setcycle 3 creativenotcreative "wf4.jpg"
	setcycle 4 correct_response "z"
	setcycle 4 creativenotcreative "wf5.jpg"
	setcycle 5 correct_response "z"
	setcycle 5 creativenotcreative "wf6.jpg"
	setcycle 6 correct_response "/"
	setcycle 6 creativenotcreative "bf1.jpg"
	setcycle 7 correct_response "/"
	setcycle 7 creativenotcreative "bf2.jpg"
	setcycle 8 correct_response "/"
	setcycle 8 creativenotcreative "bf3.jpg"
	setcycle 9 correct_response "/"
	setcycle 9 creativenotcreative "bf4.jpg"
	setcycle 10 correct_response "/"
	setcycle 10 creativenotcreative "bf5.jpg"
	setcycle 11 correct_response "/"
	setcycle 11 creativenotcreative "bf6.jpg"
	run CreativeNotCreative_Seq

define sequence CreativeNotCreative_Seq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run CreativeNotCreative_Fixation always
	run CreativeNotCreative_Sketchpad always
	run CreativeNotCreative_Keyboard always
	run _logger always

define sketchpad CreativeNotCreative_Sketchpad
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-192 z_index=0
	draw image center=1 file="[creativenotcreative]" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad End
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Thank you for participating in this study!" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="If you have any questions, please contact the researcher." x=0 y=0 z_index=0

define sketchpad NegativeCreative_PositiveNotCreative_Demo
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to begin." x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="The item will appear here" x=0 y=0 z_index=0

define feedback NegativeCreative_PositiveNotCreative_Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your average response time was [avg_rt]ms." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue." x=0 y=160 z_index=0

define sketchpad NegativeCreative_PositiveNotCreative_Fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad NegativeCreative_PositiveNotCreative_Instructions
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Once again, you will be presented with a set of words to classify into groups." x=0 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="you saw separately, will be presented together." x=0 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="    To classify a word as           OR            press the 'z' key." x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="   To classify a word as        OR         press the '/' key." x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Press Enter to begin." x=0 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Four labels at the top will tell you which words go with each key." x=0 y=192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Again, the four categories (POSITIVE, NEGATIVE, CREATIVE, NOT CREATIVE)" x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Please remember that each word will fall in ONLY ONE CATEGORY." x=0 y=160 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text=NEGATIVE x=32 y=-128 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="EUROPEAN AMERICAN" x=32 y=-64 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text=POSITIVE x=32 y=0 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="AFRICAN AMERICAN" x=32 y=64 z_index=0

define keyboard_response NegativeCreative_PositiveNotCreative_Keyboard
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define loop NegativeCreative_PositiveNotCreative_Loop
	set skip 0
	set repeat 2
	set order "random"
	set offset "no"
	set item "NegativeCreative_PositiveNotCreative_sEQ"
	set description "Repeatedly runs another item"
	set cycles 24
	set column_order "negcreposnocre;correct_response;picture"
	set break_if "never"
	setcycle 0 correct_response "/"
	setcycle 0 picture "0"
	setcycle 0 negcreposnocre "happy"
	setcycle 1 correct_response "/"
	setcycle 1 picture "0"
	setcycle 1 negcreposnocre "joyous"
	setcycle 2 correct_response "/"
	setcycle 2 picture "0"
	setcycle 2 negcreposnocre "love"
	setcycle 3 correct_response "/"
	setcycle 3 picture "0"
	setcycle 3 negcreposnocre "peace"
	setcycle 4 correct_response "/"
	setcycle 4 picture "0"
	setcycle 4 negcreposnocre "win"
	setcycle 5 correct_response "/"
	setcycle 5 picture "0"
	setcycle 5 negcreposnocre "triumph"
	setcycle 6 correct_response "z"
	setcycle 6 picture "0"
	setcycle 6 negcreposnocre "sad"
	setcycle 7 correct_response "z"
	setcycle 7 picture "0"
	setcycle 7 negcreposnocre "despair"
	setcycle 8 correct_response "z"
	setcycle 8 picture "0"
	setcycle 8 negcreposnocre "war"
	setcycle 9 correct_response "z"
	setcycle 9 picture "0"
	setcycle 9 negcreposnocre "hate"
	setcycle 10 correct_response "z"
	setcycle 10 picture "0"
	setcycle 10 negcreposnocre "lose"
	setcycle 11 correct_response "z"
	setcycle 11 picture "0"
	setcycle 11 negcreposnocre "defeat"
	setcycle 12 correct_response "z"
	setcycle 12 picture "1"
	setcycle 12 negcreposnocre "wf1.jpg"
	setcycle 13 correct_response "z"
	setcycle 13 picture "1"
	setcycle 13 negcreposnocre "wf2.jpg"
	setcycle 14 correct_response "z"
	setcycle 14 picture "1"
	setcycle 14 negcreposnocre "wf3.jpg"
	setcycle 15 correct_response "z"
	setcycle 15 picture "1"
	setcycle 15 negcreposnocre "wf4.jpg"
	setcycle 16 correct_response "z"
	setcycle 16 picture "1"
	setcycle 16 negcreposnocre "wf5.jpg"
	setcycle 17 correct_response "z"
	setcycle 17 picture "1"
	setcycle 17 negcreposnocre "wf6.jpg"
	setcycle 18 correct_response "/"
	setcycle 18 picture "1"
	setcycle 18 negcreposnocre "bf1.jpg"
	setcycle 19 correct_response "/"
	setcycle 19 picture "1"
	setcycle 19 negcreposnocre "bf2.jpg"
	setcycle 20 correct_response "/"
	setcycle 20 picture "1"
	setcycle 20 negcreposnocre "bf3.jpg"
	setcycle 21 correct_response "/"
	setcycle 21 picture "1"
	setcycle 21 negcreposnocre "bf4.jpg"
	setcycle 22 correct_response "/"
	setcycle 22 picture "1"
	setcycle 22 negcreposnocre "bf5.jpg"
	setcycle 23 correct_response "/"
	setcycle 23 picture "1"
	setcycle 23 negcreposnocre "bf6.jpg"
	run NegativeCreative_PositiveNotCreative_sEQ

define sketchpad NegativeCreative_PositiveNotCreative_Sketchpad
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[picture] = 0" text="[negcreposnocre]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-224 z_index=0
	draw image center=1 file="[negcreposnocre]" scale=1 show_if="[picture] = 1" x=0 y=0 z_index=0

define sequence NegativeCreative_PositiveNotCreative_sEQ
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run NegativeCreative_PositiveNotCreative_Fixation always
	run NegativeCreative_PositiveNotCreative_Sketchpad always
	run NegativeCreative_PositiveNotCreative_Keyboard always
	run _logger always

define sketchpad NegativePositive_Demo
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to begin." x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="The word will appear here" x=0 y=0 z_index=0

define feedback NegativePositive_Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your average response time was [avg_rt]ms" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue." x=0 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0

define sketchpad NegativePositive_Fixation
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-192 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad NegativePositive_Instructions
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="You will be presented with Negative and Positive words once again. " x=0 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="To classify a word as NEGATIVE," x=-224 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="To classify a word as POSITIVE," x=224 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="press the 'z' key." x=-224 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="press the '/' key." x=224 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Two labels at the top will tell you which words go with each key." x=0 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press Enter to begin." x=0 y=160 z_index=0

define keyboard_response NegativePositive_Keyboard
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define loop NegativePositive_Loop
	set skip 0
	set repeat 2
	set order "random"
	set offset "no"
	set item "NegativePositive_Seq"
	set description "Repeatedly runs another item"
	set cycles 12
	set column_order "negativepositive;correct_response"
	set break_if "never"
	setcycle 0 negativepositive "happy"
	setcycle 0 correct_response "/"
	setcycle 1 negativepositive "joyous"
	setcycle 1 correct_response "/"
	setcycle 2 negativepositive "love"
	setcycle 2 correct_response "/"
	setcycle 3 negativepositive "peace"
	setcycle 3 correct_response "/"
	setcycle 4 negativepositive "win"
	setcycle 4 correct_response "/"
	setcycle 5 negativepositive "triumph"
	setcycle 5 correct_response "/"
	setcycle 6 negativepositive "sad"
	setcycle 6 correct_response "z"
	setcycle 7 negativepositive "despair"
	setcycle 7 correct_response "z"
	setcycle 8 negativepositive "war"
	setcycle 8 correct_response "z"
	setcycle 9 negativepositive "hate"
	setcycle 9 correct_response "z"
	setcycle 10 negativepositive "lose"
	setcycle 10 correct_response "z"
	setcycle 11 negativepositive "defeat"
	setcycle 11 correct_response "z"
	run NegativePositive_Seq

define sequence NegativePositive_Seq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run NegativePositive_Fixation always
	run NegativePositive_Sketchpad always
	run NegativePositive_Keyboard always
	run _logger always

define sketchpad NegativePositive_Sketchpad
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="[negativepositive]" x=0 y=0 z_index=0

define feedback PositiveCreative_NegativeNotCreative_Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue." x=0 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your average reponse time was [avg_rt]ms" x=0 y=-32 z_index=0

define sketchpad PositiveCreative_NegativeNotCreative_Fixaiton
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0

define sketchpad PositiveCreative_NegativeNotCreative_Instruction
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="However, now the four categories (POSITIVE, NEGATIVE, AFRICAN AMERICAN, EUROPEAN AMERICAN)" x=0 y=-256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="you saw separately, will be presented together." x=0 y=-224 z_index=0
	draw rect color=black fill=0 h=0 penwidth=1 show_if=always w=0 x=-352 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Once again, you will be presented with a set of WORDS OR FACES to classify into groups." x=0 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Press Enter for further instructions." x=0 y=256 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Please remember that each item will fall in ONLY ONE CATEGORY." x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Four labels at the top will tell you which words go with each key." x=0 y=160 z_index=0

define keyboard_response PositiveCreative_NegativeNotCreative_Keyboard
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define loop PositiveCreative_NegativeNotCreative_Loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "PositiveCreative_NegativeNotCreative_Seq"
	set description "Repeatedly runs another item"
	set cycles 24
	set column_order "correct_response;poscrenegnocre;image"
	set break_if "never"
	setcycle 0 correct_response "z"
	setcycle 0 image "0"
	setcycle 0 poscrenegnocre "happy"
	setcycle 1 correct_response "z"
	setcycle 1 image "0"
	setcycle 1 poscrenegnocre "joyous"
	setcycle 2 correct_response "z"
	setcycle 2 image "0"
	setcycle 2 poscrenegnocre "love"
	setcycle 3 correct_response "z"
	setcycle 3 image "0"
	setcycle 3 poscrenegnocre "peace"
	setcycle 4 correct_response "z"
	setcycle 4 image "0"
	setcycle 4 poscrenegnocre "win"
	setcycle 5 correct_response "z"
	setcycle 5 image "0"
	setcycle 5 poscrenegnocre "triumph"
	setcycle 6 correct_response "z"
	setcycle 6 image "0"
	setcycle 6 poscrenegnocre "sad"
	setcycle 7 correct_response "z"
	setcycle 7 image "0"
	setcycle 7 poscrenegnocre "despair"
	setcycle 8 correct_response "z"
	setcycle 8 image "0"
	setcycle 8 poscrenegnocre "war"
	setcycle 9 correct_response "/"
	setcycle 9 image "0"
	setcycle 9 poscrenegnocre "hate"
	setcycle 10 correct_response "/"
	setcycle 10 image "0"
	setcycle 10 poscrenegnocre "lose"
	setcycle 11 correct_response "/"
	setcycle 11 image "0"
	setcycle 11 poscrenegnocre "defeat"
	setcycle 12 correct_response "z"
	setcycle 12 image "1"
	setcycle 12 poscrenegnocre "wf1.jpg"
	setcycle 13 correct_response "z"
	setcycle 13 image "1"
	setcycle 13 poscrenegnocre "wf2.jpg"
	setcycle 14 correct_response "z"
	setcycle 14 image "1"
	setcycle 14 poscrenegnocre "wf3.jpg"
	setcycle 15 correct_response "z"
	setcycle 15 image "1"
	setcycle 15 poscrenegnocre "wf4.jpg"
	setcycle 16 correct_response "z"
	setcycle 16 image "1"
	setcycle 16 poscrenegnocre "wf5.jpg"
	setcycle 17 correct_response "z"
	setcycle 17 image "1"
	setcycle 17 poscrenegnocre "wf6.jpg"
	setcycle 18 correct_response "/"
	setcycle 18 image "1"
	setcycle 18 poscrenegnocre "bf1.jpg"
	setcycle 19 correct_response "/"
	setcycle 19 image "1"
	setcycle 19 poscrenegnocre "bf2.jpg"
	setcycle 20 correct_response "/"
	setcycle 20 image "1"
	setcycle 20 poscrenegnocre "bf3.jpg"
	setcycle 21 correct_response "/"
	setcycle 21 image "1"
	setcycle 21 poscrenegnocre "bf4.jpg"
	setcycle 22 correct_response "/"
	setcycle 22 image "1"
	setcycle 22 poscrenegnocre "bf5.jpg"
	setcycle 23 correct_response "/"
	setcycle 23 image "1"
	setcycle 23 poscrenegnocre "bf6.jpg"
	run PositiveCreative_NegativeNotCreative_Seq

define sequence PositiveCreative_NegativeNotCreative_Seq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run PositiveCreative_NegativeNotCreative_Fixaiton always
	run PositiveCreative_NegativeNotCreative_Sketchpad always
	run PositiveCreative_NegativeNotCreative_Keyboard always
	run _logger always

define sketchpad PositiveCreative_NegativeNotCreative_Sketchpad
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if="[image] = 0" text="[poscrenegnocre]" x=0 y=0 z_index=0
	draw image center=1 file="[poscrenegnocre]" scale=1 show_if="[image] = 1" x=0 y=0 z_index=0

define sketchpad PositiveNegative_Demo
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="The word will appear here" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to begin." x=0 y=128 z_index=0

define feedback PositiveNegative_Feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to continue." x=0 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your average response time was [avg_rt]ms" x=0 y=-32 z_index=0

define sketchpad PositiveNegative_Instructions
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="You will be presented with a set of words to classify into groups." x=0 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="This task requires that you classify items as quickly as you can while making as few mistakes as possible. " x=0 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="The following is a list of category labels and example items that belong to each of those categories." x=0 y=-96 z_index=0
	draw line color=black penwidth=1 show_if=always x1=-288 x2=-288 y1=32 y2=32 z_index=0
	draw line color=black penwidth=1 show_if=always x1=288 x2=-288 y1=32 y2=32 z_index=0
	draw line color=black penwidth=1 show_if=always x1=-192 x2=-192 y1=-32 y2=96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text=POSITIVE x=-256 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text=NEGATIVE x=-256 y=64 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=672 x=-320 y=-32 z_index=0
	draw line color=black penwidth=1 show_if=always x1=-320 x2=-288 y1=32 y2=32 z_index=0
	draw line color=black penwidth=1 show_if=always x1=352 x2=288 y1=32 y2=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="happy, joyous, love, peace, win, triumph" x=64 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="sad, despair, war, hate, lose, defeat, terror" x=64 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="To classify a word as POSITIVE, press the 'z' key." x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="To classify a word as NEGATIVE, press the '/' key." x=0 y=160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press Enter to begin." x=0 y=288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="Two labels at the top will tell you which words go with each key." x=0 y=224 z_index=0

define keyboard_response PositiveNegative_Keyboard
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define loop PositiveNegative_Loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "PostiveNegative_Seq"
	set description "Repeatedly runs another item"
	set cycles 12
	set column_order "correct_response;positivenegative"
	set break_if "never"
	setcycle 0 correct_response "z"
	setcycle 0 positivenegative "happy"
	setcycle 1 correct_response "z"
	setcycle 1 positivenegative "joyous"
	setcycle 2 correct_response "z"
	setcycle 2 positivenegative "love"
	setcycle 3 correct_response "z"
	setcycle 3 positivenegative "peace"
	setcycle 4 correct_response "z"
	setcycle 4 positivenegative "win"
	setcycle 5 correct_response "z"
	setcycle 5 positivenegative "triumph"
	setcycle 6 correct_response "/"
	setcycle 6 positivenegative "sad"
	setcycle 7 correct_response "/"
	setcycle 7 positivenegative "despair"
	setcycle 8 correct_response "/"
	setcycle 8 positivenegative "war"
	setcycle 9 correct_response "/"
	setcycle 9 positivenegative "hate"
	setcycle 10 correct_response "/"
	setcycle 10 positivenegative "lose"
	setcycle 11 correct_response "/"
	setcycle 11 positivenegative "defeat"
	run PostiveNegative_Seq

define sequence Positive_Negative_Professions
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run PositiveNegative_Instructions always
	run PositiveNegative_Demo always
	run PositiveNegative_Loop always
	run PositiveNegative_Feedback always
	run CreativeNotCreative_Instructions always
	run CreativeNotCreative_Demo always
	run CreativeNotCreative_Loop always
	run CreativeNotCreative_Feedback always
	run PositiveCreative_NegativeNotCreative_Instruction always
	run PostiveCreative_NegativeNotCreative_Instructions2 always
	run PostiveCreative_NegativeNotCreative_Demo always
	run PositiveCreative_NegativeNotCreative_Loop always
	run PositiveCreative_NegativeNotCreative_Feedback always
	run NegativePositive_Instructions always
	run NegativePositive_Demo always
	run NegativePositive_Loop always
	run NegativePositive_Feedback always
	run PositiveCreative_NegativeNotCreative_Instruction always
	run NegativeCreative_PositiveNotCreative_Demo always
	run NegativeCreative_PositiveNotCreative_Loop always
	run NegativeCreative_PositiveNotCreative_Feedback always
	run ThankYou always

define sketchpad PostiveCreative_NegativeNotCreative_Demo
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text=OR x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press any key to begin" x=0 y=128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="EUROPEAN AMERICAN" x=-256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="AFRICAN AMERICAN" x=256 y=-160 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="The word will appear here" x=0 y=0 z_index=0

define sketchpad PostiveCreative_NegativeNotCreative_Instructions2
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="If the item is one of the below, press  the z key:" x=0 y=-256 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text=POSITIVE x=32 y=-224 z_index=0
	draw textline center=1 color=red font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="EUROPEAN AMERICAN" x=32 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="If the item is one of the below, press the / key" x=0 y=-96 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text=NEGATIVE x=32 y=-64 z_index=0
	draw textline center=1 color=RED font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="AFRICAN AMERICAN" x=32 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Four labels at the top will tell you which words go with each key." x=0 y=96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Press Enter to begin." x=0 y=192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Again, please remember that each item will fall in ONLY ONE CATEGORY." x=0 y=64 z_index=0

define sketchpad PostiveNegative_Fixation
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-192 z_index=0

define sequence PostiveNegative_Seq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run PostiveNegative_Fixation always
	run PostiveNegative_Sketchpad always
	run PositiveNegative_Keyboard always
	run _logger always

define sketchpad PostiveNegative_Sketchpad
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=NEGATIVE x=256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text=POSITIVE x=-256 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="[positivenegative]" x=0 y=0 z_index=0

define sketchpad ThankYou
	set duration "keypress"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Your responses have been recorded :)" x=0 y=-64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=22 html=yes show_if=always text="Thank you for participating!" x=0 y=0 z_index=0

define logger ____logger
	set description "Logs experimental data"
	set auto_log "yes"

define logger ___logger
	set description "Logs experimental data"
	set auto_log "yes"

define fixation_dot __fixation_dot
	set y 0
	set x 0
	set style "cross"
	set penwidth 2
	set foreground "black"
	set duration 250
	set description "Presents a central fixation dot with a choice of various styles"
	set background "white"

define logger __logger
	set description "Logs experimental data"
	set auto_log "yes"

define fixation_dot _fixation_dot
	set y 0
	set x 0
	set style "filled-small"
	set penwidth 2
	set foreground "black"
	set duration 50
	set description "Presents a central fixation dot with a choice of various styles"
	set background "white"

define logger _logger
	set description "Logs experimental data"
	set auto_log "yes"

define loop _loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "_sequence"
	set description "Repeatedly runs another item"
	set cycles 1
	set column_order ""
	set break_if "never"
	run _sequence

define sequence _sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"

define fixation_dot fixation_dot
	set y 0
	set x 0
	set style "default"
	set penwidth 3
	set duration 1000
	set description "Presents a central fixation dot with a choice of various styles"

define logger logger
	set description "Logs experimental data"
	set auto_log "yes"

define sketchpad sketchpad
	set duration "keypress"
	set description "Displays stimuli"

