---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "no"
set title "politicianRateExperimentv1"
set synth_backend "legacy"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "xpyriment"
set keyboard_backend "legacy"
set height 768
set foreground "black"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "relative"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "xpyriment"
set bidi "no"
set background "#DDDDDD"

define form_text_display IntroText
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Welcome</span>"
	__form_text__
	Thank you for participating in this study.
	
	In this study, you will see a word in the middle of the screen, with pictures around the word. Your job is to decide whether the word is something which would fit into a shoebox. You should respond as quickly as possible.
	
	You should ignore the pictures.
	
	If the word is something that would fit completely in a shoebox, press the Z button. If it is something which would not fit completely in a shoebox, press the / button. 
	
	Now you will do some practice trials.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display endInstructions
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Thank you</span>"
	set form_text "You have finished this part of the experiment. Please get your experimenter to continue."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run IntroText always
	run practicetrials always
	run instructionsPreexp always
	run new_loop always
	run endInstructions always

define sketchpad face
	set start_response_interval "no"
	set duration 500
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw image center=1 file="[facel]" scale=0.5 show_if=always x=-264.0 y=-4.0 z_index=0
	draw image center=1 file="[facel]" scale=0.5 show_if=always x=264.0 y=-4.0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose whether the item listed in the word would fit in a shoebox." x=0 y=-250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Z: Would fit in a shoebox." x=0 y=-220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="/: Would NOT fit in a shoebox." x=0 y=-200 z_index=0

define sketchpad faceword
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw image center=1 file="[facel]" scale=0.5 show_if=always x=-360 y=-4 z_index=0
	draw image center=1 file="[facel]" scale=0.5 show_if=always x=360 y=-4 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=32 html=yes show_if=always text="[word]" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose whether the item listed in the word would fit in a shoebox." x=0 y=-250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Z: Would fit in a shoebox." x=0 y=-220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="/: Would NOT fit in a shoebox." x=0 y=-200 z_index=0

define form_text_display instructionsPreexp
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	__form_text__
	Now the experiment will begin.
	
	Please press OK below to start. 
	
	If you have any questions, please ask your experimenter at this time.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response new_keyboard_response
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "z;/"

define logger new_logger_1
	set description "Logs experimental data"
	set auto_log "yes"

define loop new_loop
	set skip 0
	set repeat 2
	set order "random"
	set offset "no"
	set item "trialSeq"
	set description "Repeatedly runs another item"
	set cycles 72
	set column_order "facel;word;facesex;wordtype"
	set break_if "never"
	setcycle 0 facel "01F_NE_C.bmp"
	setcycle 0 wordtype "M"
	setcycle 0 word "basketball"
	setcycle 0 facesex "F"
	setcycle 1 facel "03F_NE_C.bmp"
	setcycle 1 wordtype "M"
	setcycle 1 word "hammer"
	setcycle 1 facesex "F"
	setcycle 2 facel "06F_NE_C.bmp"
	setcycle 2 wordtype "M"
	setcycle 2 word "gun"
	setcycle 2 facesex "F"
	setcycle 3 facel "07F_NE_C.bmp"
	setcycle 3 wordtype "M"
	setcycle 3 word "truck"
	setcycle 3 facesex "F"
	setcycle 4 facel "08F_NE_C.bmp"
	setcycle 4 wordtype "M"
	setcycle 4 word "briefcase"
	setcycle 4 facesex "F"
	setcycle 5 facel "09F_NE_C.bmp"
	setcycle 5 wordtype "M"
	setcycle 5 word "tie"
	setcycle 5 facesex "F"
	setcycle 6 facel "20M_NE_C.bmp"
	setcycle 6 wordtype "M"
	setcycle 6 word "baseball hat"
	setcycle 6 facesex "M"
	setcycle 7 facel "21M_NE_C.bmp"
	setcycle 7 wordtype "M"
	setcycle 7 word "pocket knife"
	setcycle 7 facesex "M"
	setcycle 8 facel "22M_NE_C.bmp"
	setcycle 8 wordtype "M"
	setcycle 8 word "hair gel"
	setcycle 8 facesex "M"
	setcycle 9 facel "23M_NE_C.bmp"
	setcycle 9 wordtype "M"
	setcycle 9 word "chainsaw"
	setcycle 9 facesex "M"
	setcycle 10 facel "24M_NE_C.bmp"
	setcycle 10 wordtype "M"
	setcycle 10 word "tractor"
	setcycle 10 facesex "M"
	setcycle 11 facel "28M_NE_C.bmp"
	setcycle 11 wordtype "M"
	setcycle 11 word "cologne"
	setcycle 11 facesex "M"
	setcycle 12 facel "01F_NE_C.bmp"
	setcycle 12 wordtype "M"
	setcycle 12 word "watch"
	setcycle 12 facesex "F"
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	setcycle 18 facel "01F_NE_C.bmp"
	setcycle 18 wordtype "F"
	setcycle 18 word "oven"
	setcycle 18 facesex "F"
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	setcycle 24 facel "20M_NE_C.bmp"
	setcycle 24 wordtype "F"
	setcycle 24 word "sewing machine"
	setcycle 24 facesex "M"
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	setcycle 36 facel "20M_NE_C.bmp"
	setcycle 36 wordtype ""
	setcycle 36 word "basketball"
	setcycle 36 facesex "M"
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	setcycle 42 facel "01F_NE_C.bmp"
	setcycle 42 wordtype ""
	setcycle 42 word "baseball hat"
	setcycle 42 facesex "F"
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	setcycle 54 facel "20M_NE_C.bmp"
	setcycle 54 wordtype ""
	setcycle 54 word "oven"
	setcycle 54 facesex ""
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	run trialSeq

define loop practicetrials
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trialSeq"
	set description "Repeatedly runs another item"
	set cycles 12
	set column_order "facel;word;facesex;wordtype"
	set break_if "never"
	setcycle 0 facel "01F_NE_C.bmp"
	setcycle 0 wordtype "F"
	setcycle 0 word "oven"
	setcycle 0 facesex "F"
	setcycle 1 facel "03F_NE_C.bmp"
	setcycle 1 wordtype "M"
	setcycle 1 word "hammer"
	setcycle 1 facesex "F"
	setcycle 2 facel "06F_NE_C.bmp"
	setcycle 2 wordtype "F"
	setcycle 2 word "apron"
	setcycle 2 facesex "F"
	setcycle 3 facel "07F_NE_C.bmp"
	setcycle 3 wordtype "F"
	setcycle 3 word "diary"
	setcycle 3 facesex "F"
	setcycle 4 facel "08F_NE_C.bmp"
	setcycle 4 wordtype "M"
	setcycle 4 word "pocket knife"
	setcycle 4 facesex "F"
	setcycle 5 facel "09F_NE_C.bmp"
	setcycle 5 wordtype "M"
	setcycle 5 word "basketball"
	setcycle 5 facesex "F"
	setcycle 6 facel "20M_NE_C.bmp"
	setcycle 6 wordtype "F"
	setcycle 6 word "oven"
	setcycle 6 facesex "M"
	setcycle 7 facel "21M_NE_C.bmp"
	setcycle 7 wordtype "M"
	setcycle 7 word "toaster"
	setcycle 7 facesex "M"
	setcycle 8 facel "22M_NE_C.bmp"
	setcycle 8 wordtype "F"
	setcycle 8 word "apron"
	setcycle 8 facesex "M"
	setcycle 9 facel "23M_NE_C.bmp"
	setcycle 9 wordtype "F"
	setcycle 9 word "diary"
	setcycle 9 facesex "M"
	setcycle 10 facel "24M_NE_C.bmp"
	setcycle 10 wordtype "M"
	setcycle 10 word "diaper"
	setcycle 10 facesex "M"
	setcycle 11 facel "28M_NE_C.bmp"
	setcycle 11 wordtype "M"
	setcycle 11 word "basketball"
	setcycle 11 facesex "M"
	run trialSeq

define sketchpad preslide
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose whether the item listed in the word would fit in a shoebox." x=0 y=-250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Z: Would fit in a shoebox." x=0 y=-220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="/: Would NOT fit in a shoebox." x=0 y=-200 z_index=0

define sequence trialSeq
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run preslide always
	run face always
	run faceword always
	run new_keyboard_response always
	run new_logger_1 always

