---
API: 2
OpenSesame: 3.0.5
Platform: nt
---
set width 1024
set uniform_coordinates "no"
set title "politicianRateExperimentv1"
set synth_backend "legacy"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "legacy"
set keyboard_backend "legacy"
set height 768
set foreground "black"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "relative"
set compensation 0
set color_backend "legacy"
set clock_backend "legacy"
set canvas_backend "legacy"
set bidi "no"
set background "#DDDDDD"

define form_text_display IntroText
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Welcome</span>"
	__form_text__
	Thank you for participating in this study.
	
	In this study, you will be asked to rate faces of politicians on various attributes. You will see two candidates and be asked to compare them.
	
	In the next few slides, you will see some instructions to show you how this will work.  Please press OK to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define inline_script _inline_script
	set description "Executes Python code"
	___run__
	self.experiment.set("yesc", "Candidate Y")
	self.experiment.set("noc","Candidate X")
	if self.get("correct") == 1:
		self.experiment.set("yesc", "Candidate X")
		self.experiment.set("noc","Candidate Y")
	__end__
	set _prepare ""

define keyboard_response atFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define text_display atInstructions
	set maxchar 50
	set foreground "black"
	set font_size 18
	set font_family "mono"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this part of the experiment, your task is to rate which candidate looks more attractive.
	
	If you have any questions about this part of the experiment, please ask your experimenter now.
	
	If you are ready to begin, please press any key to continue.
	__end__
	set background "white"
	set align "center"

define form_text_display atInstructions1
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	In this part of the experiment, your task is to rate which candidate looks more attractive.
	
	If you have any questions about this part of the experiment, please ask your experimenter now.
	
	If you are ready to begin, please click below to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response atRC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define feedback atScale
	set start_response_interval "yes"
	set reset_variables "yes"
	set duration 0
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="You chose Candidate X as more attractive than Candidate Y" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="Please rate how much more you think Candidate X is more attractive than Candidate Y" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="You chose Candidate Y as more attractive than Candidate X" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="Please rate how much more you think Candidate Y is more attractive than Candidate X" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more attractive                                Much more attractive" x=0 y=280 z_index=0

define sketchpad at_choose
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think looks more attractive" x=0 y=250 z_index=0

define logger at_log
	set use_quotes "yes"
	set unicode "no"
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	log facel
	log facer
	log response_atFC
	log response_time_atFC
	log response_atRC
	log response_time_atRC
	log winner

define loop at_rate
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "at_sequence"
	set description "Repeatedly runs another item"
	set cycles 39
	set column_order "facel;facer;winner"
	set break_if "never"
	setcycle 0 facel "NC_1_2014_R_Mark_Martin.jpg"
	setcycle 0 winner "L"
	setcycle 0 facer "NC_1_2014_R_Ola_Lewis.jpg"
	setcycle 1 facel "NC_1_2014_sam_ervin.jpg"
	setcycle 1 winner "L"
	setcycle 1 facer "NC_2_2014_D_robert_hunter_jr.jpg"
	setcycle 2 facel "NC_3_2014_D_cheri_beasley.jpg"
	setcycle 2 winner "L"
	setcycle 2 facer "NC_3_2014_R_michael_robinson.jpg"
	setcycle 3 facel "NC_4_2014_D_robin_hudson.jpg"
	setcycle 3 winner "L"
	setcycle 3 facer "NC_4_2014_R_eric_levison.jpg"
	setcycle 4 facel "OH_1_2014__Rjudith_french.jpg"
	setcycle 4 winner "L"
	setcycle 4 facer "OH_1_2014_D_john_o'donnell.jpg"
	setcycle 5 facel "OH_3_2014_R_sharon_kennedy.jpg"
	setcycle 5 winner "L"
	setcycle 5 facer "OH_2_2014_D_tom_letson.jpg"
	setcycle 6 facel "TX_1_2014_R_nathan_hecht.jpg"
	setcycle 6 winner "L"
	setcycle 6 facer "TX_1_2014_D_william_moody.jpg"
	setcycle 7 facel "TX_2_2014_R_jeff_brown.jpg"
	setcycle 7 winner "L"
	setcycle 7 facer "TX_2_2014-D_Lawrence Meyers.jpg"
	setcycle 8 facel "TX_3_2014_R_jeff_boyd.jpg"
	setcycle 8 winner "L"
	setcycle 8 facer "TX_3_2014_D_gina_benavides.jpg"
	setcycle 9 facel "TX_5_2014_R_bert_richardson.jpg"
	setcycle 9 winner "L"
	setcycle 9 facer "TX_4_2014_I_john_granberg.jpg"
	setcycle 10 facel "TX_6_2014_R_kevin_yeary.jpg"
	setcycle 10 winner "L"
	setcycle 10 facer "TX_6_2014_I_quanah_parker.jpg"
	setcycle 11 facel "TX_7_2014_R_david_newell.jpg"
	setcycle 11 winner "L"
	setcycle 11 facer "TX_7_2014_I_william_strange.jpg"
	setcycle 12 facel "AR_1_2014_robin_wynne.jpg"
	setcycle 12 winner "L"
	setcycle 12 facer "AR_1_2014_tim_cullen.jpg"
	setcycle 13 facel "ID_1_2014_joel_horton.jpg"
	setcycle 13 winner "L"
	setcycle 13 facer "ID_1_2014_william_seiniger.jpg"
	setcycle 14 facel "MN_1_2014_wilhelmina_wright.jpg"
	setcycle 14 winner "L"
	setcycle 14 facer "MN_1_2014_john_hancock.jpg"
	setcycle 15 facel "MN_2_2014_david_lillehaug.jpg"
	setcycle 15 winner "L"
	setcycle 15 facer "MN_2_2014_michelle_macdonald.jpg"
	setcycle 16 facel "MT_1_2014_james_rice.jpg"
	setcycle 16 winner "L"
	setcycle 16 facer "MT_1_2014_david_herbert.jpg"
	setcycle 17 facel "MT_2_2014_mike_wheat.jpg"
	setcycle 17 winner "L"
	setcycle 17 facer "MT_2_2014_lawrence_vandyke.jpg"
	setcycle 18 facel "KY_1_2012_will_scott.jpg"
	setcycle 18 winner "L"
	setcycle 18 facer "KY_1_2012_janet_stumbo.jpg"
	setcycle 19 facel "MI_1_2012_brian_zahra.jpg"
	setcycle 19 winner "L"
	setcycle 19 facer "MI_1_2012_shelia_johnson.jpg"
	setcycle 20 facel "MN_1_2012_dan_griffith.jpg"
	setcycle 20 winner "R"
	setcycle 20 facer "MN_1_2012_lorie_gildea.jpg"
	setcycle 21 facel "MN_2_2012_dean_barkley.jpg"
	setcycle 21 winner "R"
	setcycle 21 facer "MN_2_2012_barry_anderson.jpg"
	setcycle 22 facel "MS_1_2012_richard_phillips.jpg"
	setcycle 22 winner "R"
	setcycle 22 facer "MS_1_2012_josiah_coleman.jpg"
	setcycle 23 facel "MS_2_2012_talmadge_braddock.jpg"
	setcycle 23 winner "R"
	setcycle 23 facer "MS_2_2012_mike_randolph.jpg"
	setcycle 24 facel "MT_1_2012_ed_sheehy.jpg"
	setcycle 24 winner "R"
	setcycle 24 facer "MT_1_2012_laurie_mckinnon.jpg"
	setcycle 25 facel "NM_1_2012_paul_kennedy.jpg"
	setcycle 25 winner "R"
	setcycle 25 facer "NM_1_2012_barbara_vigil.jpg"
	setcycle 26 facel "NC_1_2012_sam_ervin.jpg"
	setcycle 26 winner "R"
	setcycle 26 facer "NC_1_2012_paul_newby.jpg"
	setcycle 27 facel "OH_1_2012_D_mike_skindell.jpg"
	setcycle 27 winner "R"
	setcycle 27 facer "OH_1_2012_R_terrence_o'donnell.jpg"
	setcycle 28 facel "OH_2_2012_R_robert_cupp.jpg"
	setcycle 28 winner "R"
	setcycle 28 facer "OH_2_2012_D_william_o'neill.jpg"
	setcycle 29 facel "OH_3_2012_D_yvette_brown.jpg"
	setcycle 29 winner "R"
	setcycle 29 facer "OH_3_2012_R_sharon_kennedy.jpg"
	setcycle 30 facel "TX_2_2012_D_keith_hampton.jpg"
	setcycle 30 winner "R"
	setcycle 30 facer "TX_2_2012_R_sharon_keller.jpg"
	setcycle 31 facel "WA_1_2012_richard sanders.jpg"
	setcycle 31 winner "R"
	setcycle 31 facer "WA_1_2012_sheryl_mccloud.jpg"
	setcycle 32 facel "MI_2_2010_alton_davis.jpg"
	setcycle 32 winner "R"
	setcycle 32 facer "MI_2_2010_mary_kelley.jpg"
	setcycle 33 facel "MN_2_2010_tim_tingelstad.jpg"
	setcycle 33 winner "R"
	setcycle 33 facer "MN_2_2010_alan_page.jpg"
	setcycle 34 facel "MT_1_2010_nels_swandal.jpg"
	setcycle 34 winner "R"
	setcycle 34 facer "MT_1_2010_beth_baker.jpg"
	setcycle 35 facel "NC_1_2010_robert_hunter.jpg"
	setcycle 35 winner "R"
	setcycle 35 facer "NC_1_2010_barbara_jackson.jpg"
	setcycle 36 facel "OH_1_2010_D_eric_brown.jpg"
	setcycle 36 winner "R"
	setcycle 36 facer "OH_1_2010_R_maureen_o'connor.jpg"
	setcycle 37 facel "OH_2_2010_D_mary_trapp.jpg"
	setcycle 37 winner "R"
	setcycle 37 facer "OH_2_2010_R_judith_lanzinger.jpg"
	setcycle 38 facel "WA_1_2010_richard sanders.jpg"
	setcycle 38 winner "R"
	setcycle 38 facer "WA_1_2010_charlie_wiggins.jpg"
	run at_sequence

define sequence at_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run at_choose always
	run atFC always
	run inline_script always
	run atScale always
	run atRC always
	run at_log always

define keyboard_response baFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define text_display baInstructions
	set maxchar 50
	set foreground "black"
	set font_size 18
	set font_family "mono"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this part of the experiment, your task is to rate which candidate looks more babyfaced.
	
	If you have any questions about this part of the experiment, please ask your experimenter now.
	
	If you are ready to begin, please press any key to continue.
	__end__
	set background "white"
	set align "center"

define keyboard_response baRC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define feedback baScale
	set start_response_interval "yes"
	set reset_variables "yes"
	set duration 0
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="You chose Candidate X as more babyfaced than Candidate Y" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="Please rate how much more you think Candidate X is more babyfaced than Candidate Y" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="You chose Candidate Y as more babyfaced than Candidate X" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="Please rate how much more you think Candidate Y is more babyfaced than Candidate X" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more babyfaced                                Much more babyfaced" x=0 y=280 z_index=0

define sketchpad ba_choose
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think looks more babyfaced" x=0 y=250 z_index=0

define logger ba_log
	set use_quotes "yes"
	set unicode "no"
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	log facel
	log facer
	log response_baFC
	log response_time_baFC
	log response_baRC
	log response_time_baRC

define loop ba_rate
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "ba_sequence"
	set description "Repeatedly runs another item"
	set cycles 54
	set column_order "facel;facer"
	set break_if "never"
	setcycle 0 facel "AL_R_2012.jpg"
	setcycle 0 facer "AL_D_2010.jpg"
	setcycle 1 facel "AR_R_2010.jpg"
	setcycle 1 facer "AR_D_2010.jpg"
	setcycle 2 facel "AZ_R_2012.JPG"
	setcycle 2 facer "AZ_D_2012.jpg"
	setcycle 3 facel "CA_R_2010.jpg"
	setcycle 3 facer "CA_D_2010.jpg"
	setcycle 4 facel "CA_R_2012.JPG"
	setcycle 4 facer "CA_D_2012.jpg"
	setcycle 5 facel "CO_R_2010.png"
	setcycle 5 facer "CO_D_2010.jpg"
	setcycle 6 facel "CT_R_2010.jpg"
	setcycle 6 facer "CT_D_2010.jpg"
	setcycle 7 facel "DE_R_2010.JPG"
	setcycle 7 facer "DE_D_2010.jpg"
	setcycle 8 facel "DE_R_2012.JPG"
	setcycle 8 facer "DE_D_2012.jpg"
	setcycle 9 facel "FL_R_2012.JPG"
	setcycle 9 facer "FL_D_2012.jpg"
	setcycle 10 facel "GA_R_2010.JPG"
	setcycle 10 facer "GA_D_2010.jpg"
	setcycle 11 facel "HI_R_2010.jpg"
	setcycle 11 facer "HI_D_2010.jpg"
	setcycle 12 facel "HI_R_2012.JPG"
	setcycle 12 facer "HI_D_2012.jpg"
	setcycle 13 facel "IA_R_2010.JPG"
	setcycle 13 facer "IA_D_2010.jpg"
	setcycle 14 facel "ID_R_2012.JPG"
	setcycle 14 facer "ID_D_2010.jpg"
	setcycle 15 facel "IL_R_2010.JPG"
	setcycle 15 facer "IL_D_2010.jpg"
	setcycle 16 facel "IN_R_2010.JPG"
	setcycle 16 facer "IN_D_2010.jpg"
	setcycle 17 facel "IN_R_2012.jpg"
	setcycle 17 facer "IN_D_2012.jpg"
	setcycle 18 facel "KS_R_2010.JPG"
	setcycle 18 facer "KS_D_2010.jpg"
	setcycle 19 facel "KY_R_2010.jpg"
	setcycle 19 facer "KY_D_2010.jpg"
	setcycle 20 facel "LA_R_2010.JPG"
	setcycle 20 facer "LA_D_2010.jpg"
	setcycle 21 facel "MD_R_2010.jpg"
	setcycle 21 facer "MD_D_2010.jpg"
	setcycle 22 facel "MD_R_2012.jpg"
	setcycle 22 facer "MD_D_2012.jpg"
	setcycle 23 facel "ME_R_2012.jpg"
	setcycle 23 facer "ME_D_2012.jpg"
	setcycle 24 facel "MI_R_2012.JPG"
	setcycle 24 facer "MI_D_2012.jpg"
	setcycle 25 facel "MN_R_2012.JPG"
	setcycle 25 facer "MN_D_2012.jpg"
	setcycle 26 facel "MO_R_2010.jpg"
	setcycle 26 facer "MO_D_2010.jpg"
	setcycle 27 facel "MO_D_2012.jpg"
	setcycle 27 facer "MO_R_2012.jpg"
	setcycle 28 facel "MS_D_2012.jpg"
	setcycle 28 facer "MS_R_2012.JPG"
	setcycle 29 facel "MT_D_2012.jpg"
	setcycle 29 facer "MT_R_2012.JPG"
	setcycle 30 facel "NC_D_2010.jpg"
	setcycle 30 facer "NC_R_2010.jpg"
	setcycle 31 facel "ND_D_2010.jpg"
	setcycle 31 facer "ND_R_2010.JPG"
	setcycle 32 facel "ND_D_2012.jpg"
	setcycle 32 facer "ND_R_2012.JPG"
	setcycle 33 facel "NH_D_2010.jpg"
	setcycle 33 facer "NH_R_2010.JPG"
	setcycle 34 facel "NJ_D_2012.jpg"
	setcycle 34 facer "NJ_R_2012.jpg"
	setcycle 35 facel "NM_D_2012.jpg"
	setcycle 35 facer "NM_R_2012.JPG"
	setcycle 36 facel "NV_D_2010.jpg"
	setcycle 36 facer "NV_R_2010.JPG"
	setcycle 37 facel "NV_D_2012.jpg"
	setcycle 37 facer "NV_R_2012.jpg"
	setcycle 38 facel "NY_D_2010.jpg"
	setcycle 38 facer "NY_R_2010.JPG"
	setcycle 39 facel "OH_D_2010.jpg"
	setcycle 39 facer "OH_R_2010.JPG"
	setcycle 40 facel "OH_D_2012.jpg"
	setcycle 40 facer "OH_R_2012.JPG"
	setcycle 41 facel "OR_D_2010.jpg"
	setcycle 41 facer "OR_R_2010.JPG"
	setcycle 42 facel "PA_D_2010.jpg"
	setcycle 42 facer "PA_R_2010.JPG"
	setcycle 43 facel "PA_D_2012.jpg"
	setcycle 43 facer "PA_R_2012.jpg"
	setcycle 44 facel "RI_D_2012.jpg"
	setcycle 44 facer "RI_R_2012.jpg"
	setcycle 45 facel "SC_D_2010.jpg"
	setcycle 45 facer "SC_R_2010.JPG"
	setcycle 46 facel "UT_D_2010.jpg"
	setcycle 46 facer "UT_R_2010.JPG"
	setcycle 47 facel "UT_D_2012.jpg"
	setcycle 47 facer "UT_R_2012.jpg"
	setcycle 48 facel "VA_D_2012.jpg"
	setcycle 48 facer "VA_R_2012.JPG"
	setcycle 49 facel "WA_D_2010.jpg"
	setcycle 49 facer "WA_R_2010.JPG"
	setcycle 50 facel "WA_D_2012.jpg"
	setcycle 50 facer "WA_R_2012.JPG"
	setcycle 51 facel "WI_D_2010.jpg"
	setcycle 51 facer "WI_R_2010.jpg"
	setcycle 52 facel "WI_D_2012.jpg"
	setcycle 52 facer "WI_R_2012.jpg"
	setcycle 53 facel "WV_D_2012.jpg"
	setcycle 53 facer "WV_R_2012.JPG"
	run ba_sequence

define sequence ba_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run ba_choose always
	run baFC always
	run inline_script always
	run baScale always
	run baRC always
	run ba_log always

define keyboard_response compFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define text_display compInstructions
	set maxchar 61
	set foreground "black"
	set font_size 30
	set font_family "sans"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this part of the experiment, your task is to rate which candidate looks more competent.
	
	Please note that there are no right or wrong answers and we are merely interested in your opinion based on your first impression.
	
	If you have any questions about the experiment, please ask your experimenter now.
	
	If you are ready to begin, please press any key to continue.
	__end__
	set background "#C0C0C0"
	set align "center"

define form_text_display compInstructions_1
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	__form_text__
	In this part of the experiment, your task is to rate which candidate looks more competent.
	
	Please note that there are no right or wrong answers and we are merely interested in your opinion based on your first impression.
	
	If you have any questions about the experiment, please ask your experimenter now.
	
	If you are ready to begin, please click the button below.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response compRC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define feedback compScale
	set start_response_interval "yes"
	set reset_variables "yes"
	set duration 0
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="You chose Candidate X as more competent than Candidate Y" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="Please rate how much more you think Candidate X is more competent than Candidate Y" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="You chose Candidate Y as more competent than Candidate X" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="Please rate how much more you think Candidate Y is more competent than Candidate X" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more compentent                                Much more competent" x=0 y=280 z_index=0

define sequence compSequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run comp_choose always
	run compFC always
	run inline_script always
	run compScale always
	run compRC always
	run comp_log always

define sketchpad comp_choose
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think looks more competent" x=0 y=250 z_index=0

define logger comp_log
	set use_quotes "yes"
	set unicode "no"
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	log facel
	log facer
	log response_compFC
	log response_time_compFC
	log response_compRC
	log response_time_compRC
	log winner

define loop comp_rate
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "compSequence"
	set description "Repeatedly runs another item"
	set cycles 39
	set column_order "facel;facer;winner"
	set break_if "never"
	setcycle 0 facel "NC_1_2014_R_Mark_Martin.jpg"
	setcycle 0 winner "L"
	setcycle 0 facer "NC_1_2014_R_Ola_Lewis.jpg"
	setcycle 1 facel "NC_1_2014_sam_ervin.jpg"
	setcycle 1 winner "L"
	setcycle 1 facer "NC_2_2014_D_robert_hunter_jr.jpg"
	setcycle 2 facel "NC_3_2014_D_cheri_beasley.jpg"
	setcycle 2 winner "L"
	setcycle 2 facer "NC_3_2014_R_michael_robinson.jpg"
	setcycle 3 facel "NC_4_2014_D_robin_hudson.jpg"
	setcycle 3 winner "L"
	setcycle 3 facer "NC_4_2014_R_eric_levison.jpg"
	setcycle 4 facel "OH_1_2014__Rjudith_french.jpg"
	setcycle 4 winner "L"
	setcycle 4 facer "OH_1_2014_D_john_o'donnell.jpg"
	setcycle 5 facel "OH_3_2014_R_sharon_kennedy.jpg"
	setcycle 5 winner "L"
	setcycle 5 facer "OH_2_2014_D_tom_letson.jpg"
	setcycle 6 facel "TX_1_2014_R_nathan_hecht.jpg"
	setcycle 6 winner "L"
	setcycle 6 facer "TX_1_2014_D_william_moody.jpg"
	setcycle 7 facel "TX_2_2014_R_jeff_brown.jpg"
	setcycle 7 winner "L"
	setcycle 7 facer "TX_2_2014-D_Lawrence Meyers.jpg"
	setcycle 8 facel "TX_3_2014_R_jeff_boyd.jpg"
	setcycle 8 winner "L"
	setcycle 8 facer "TX_3_2014_D_gina_benavides.jpg"
	setcycle 9 facel "TX_5_2014_R_bert_richardson.jpg"
	setcycle 9 winner "L"
	setcycle 9 facer "TX_4_2014_I_john_granberg.jpg"
	setcycle 10 facel "TX_6_2014_R_kevin_yeary.jpg"
	setcycle 10 winner "L"
	setcycle 10 facer "TX_6_2014_I_quanah_parker.jpg"
	setcycle 11 facel "TX_7_2014_R_david_newell.jpg"
	setcycle 11 winner "L"
	setcycle 11 facer "TX_7_2014_I_william_strange.jpg"
	setcycle 12 facel "AR_1_2014_robin_wynne.jpg"
	setcycle 12 winner "L"
	setcycle 12 facer "AR_1_2014_tim_cullen.jpg"
	setcycle 13 facel "ID_1_2014_joel_horton.jpg"
	setcycle 13 winner "L"
	setcycle 13 facer "ID_1_2014_william_seiniger.jpg"
	setcycle 14 facel "MN_1_2014_wilhelmina_wright.jpg"
	setcycle 14 winner "L"
	setcycle 14 facer "MN_1_2014_john_hancock.jpg"
	setcycle 15 facel "MN_2_2014_david_lillehaug.jpg"
	setcycle 15 winner "L"
	setcycle 15 facer "MN_2_2014_michelle_macdonald.jpg"
	setcycle 16 facel "MT_1_2014_james_rice.jpg"
	setcycle 16 winner "L"
	setcycle 16 facer "MT_1_2014_david_herbert.jpg"
	setcycle 17 facel "MT_2_2014_mike_wheat.jpg"
	setcycle 17 winner "L"
	setcycle 17 facer "MT_2_2014_lawrence_vandyke.jpg"
	setcycle 18 facel "KY_1_2012_will_scott.jpg"
	setcycle 18 winner "L"
	setcycle 18 facer "KY_1_2012_janet_stumbo.jpg"
	setcycle 19 facel "MI_1_2012_brian_zahra.jpg"
	setcycle 19 winner "L"
	setcycle 19 facer "MI_1_2012_shelia_johnson.jpg"
	setcycle 20 facel "MN_1_2012_dan_griffith.jpg"
	setcycle 20 winner "R"
	setcycle 20 facer "MN_1_2012_lorie_gildea.jpg"
	setcycle 21 facel "MN_2_2012_dean_barkley.jpg"
	setcycle 21 winner "R"
	setcycle 21 facer "MN_2_2012_barry_anderson.jpg"
	setcycle 22 facel "MS_1_2012_richard_phillips.jpg"
	setcycle 22 winner "R"
	setcycle 22 facer "MS_1_2012_josiah_coleman.jpg"
	setcycle 23 facel "MS_2_2012_talmadge_braddock.jpg"
	setcycle 23 winner "R"
	setcycle 23 facer "MS_2_2012_mike_randolph.jpg"
	setcycle 24 facel "MT_1_2012_ed_sheehy.jpg"
	setcycle 24 winner "R"
	setcycle 24 facer "MT_1_2012_laurie_mckinnon.jpg"
	setcycle 25 facel "NM_1_2012_paul_kennedy.jpg"
	setcycle 25 winner "R"
	setcycle 25 facer "NM_1_2012_barbara_vigil.jpg"
	setcycle 26 facel "NC_1_2012_sam_ervin.jpg"
	setcycle 26 winner "R"
	setcycle 26 facer "NC_1_2012_paul_newby.jpg"
	setcycle 27 facel "OH_1_2012_D_mike_skindell.jpg"
	setcycle 27 winner "R"
	setcycle 27 facer "OH_1_2012_R_terrence_o'donnell.jpg"
	setcycle 28 facel "OH_2_2012_R_robert_cupp.jpg"
	setcycle 28 winner "R"
	setcycle 28 facer "OH_2_2012_D_william_o'neill.jpg"
	setcycle 29 facel "OH_3_2012_D_yvette_brown.jpg"
	setcycle 29 winner "R"
	setcycle 29 facer "OH_3_2012_R_sharon_kennedy.jpg"
	setcycle 30 facel "TX_2_2012_D_keith_hampton.jpg"
	setcycle 30 winner "R"
	setcycle 30 facer "TX_2_2012_R_sharon_keller.jpg"
	setcycle 31 facel "WA_1_2012_richard sanders.jpg"
	setcycle 31 winner "R"
	setcycle 31 facer "WA_1_2012_sheryl_mccloud.jpg"
	setcycle 32 facel "MI_2_2010_alton_davis.jpg"
	setcycle 32 winner "R"
	setcycle 32 facer "MI_2_2010_mary_kelley.jpg"
	setcycle 33 facel "MN_2_2010_tim_tingelstad.jpg"
	setcycle 33 winner "R"
	setcycle 33 facer "MN_2_2010_alan_page.jpg"
	setcycle 34 facel "MT_1_2010_nels_swandal.jpg"
	setcycle 34 winner "R"
	setcycle 34 facer "MT_1_2010_beth_baker.jpg"
	setcycle 35 facel "NC_1_2010_robert_hunter.jpg"
	setcycle 35 winner "R"
	setcycle 35 facer "NC_1_2010_barbara_jackson.jpg"
	setcycle 36 facel "OH_1_2010_D_eric_brown.jpg"
	setcycle 36 winner "R"
	setcycle 36 facer "OH_1_2010_R_maureen_o'connor.jpg"
	setcycle 37 facel "OH_2_2010_D_mary_trapp.jpg"
	setcycle 37 winner "R"
	setcycle 37 facer "OH_2_2010_R_judith_lanzinger.jpg"
	setcycle 38 facel "WA_1_2010_richard sanders.jpg"
	setcycle 38 winner "R"
	setcycle 38 facer "WA_1_2010_charlie_wiggins.jpg"
	run compSequence

define form_text_display endInstructions
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Thank you</span>"
	set form_text "You have finished this part of the experiment. Please get your experimenter to continue."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run IntroText always
	run instructions3 always
	run keyboard_response always
	run _inline_script always
	run instructions04 always
	run instructions05 always
	run instructions06 always
	run instructions07 always
	run compInstructions_1 always
	run comp_rate always
	run trustInstructions_1 always
	run trust_rate always
	run atInstructions1 always
	run at_rate always
	run voteInstructions_1 always
	run vote_rate always
	run endInstructions always

define keyboard_response fairFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define form_text_display fairInstructions
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Title</span>"
	set form_text "Your message"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad fair_choose
	set start_response_interval "no"
	set reset_variables "yes"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think looks like a more fair person" x=0 y=250 z_index=0

define sequence fair_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fair_choose always
	run fairFC always
	run new_inline_script always
	run new_feedback always
	run new_keyboard_response_1 always
	run new_logger always

define inline_script inline_script
	set description "Executes Python code"
	___run__
	if self.get("correct") == 1:
		self.experiment.set("comp_feed", 1)
	else:
		self.experiment.set("comp_feed", 0)
	__end__
	set _prepare ""

define feedback instructions04
	set start_response_interval "no"
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw image center=1 file="AK_R_2010.jpg" scale=1 show_if=always x=-200 y=30 z_index=0
	draw image center=1 file="SD_R_2010.jpg" scale=1 show_if=always x=200 y=30 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-150 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-150 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="You chose [yesc] as more symmetrical than [noc]" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please rate how much more you think [yesc] is more symmetrical than [noc]" x=0 y=280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="After you make a response, you will see a screen that appears like this" x=0 y=-280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="In this example, you chose [yesc] as more symmetrical" x=0 y=-250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="After you make a choice, you are to rate how much more symmetrical the candidate appears" x=0 y=-220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more symmetrical                                               Much more symmetrical" x=0 y=350 z_index=0

define feedback instructions05
	set start_response_interval "no"
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="If you think your choice looks only a little more symmetrical than [noc]," x=0 y=-280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="use the number keys on the keyboard to give the candidate a low rating" x=0 y=-250 z_index=0
	draw image center=1 file="AK_R_2010.jpg" scale=1 show_if=always x=-200 y=30 z_index=0
	draw image center=1 file="SD_R_2010.jpg" scale=1 show_if=always x=200 y=30 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-150 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-150 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="You chose [yesc] as more symmetrical than [noc]" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please rate how much more you think [yesc] is more symmetrical than [noc]" x=0 y=280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more symmetrical                                               Much more symmetrical" x=0 y=350 z_index=0

define feedback instructions06
	set start_response_interval "no"
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="However, if you think your choice looks much more symmetrical than [noc]," x=0 y=-280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="use the number keys on the keyboard to give the candidate a high rating" x=0 y=-250 z_index=0
	draw image center=1 file="AK_R_2010.jpg" scale=1 show_if=always x=-200 y=30 z_index=0
	draw image center=1 file="SD_R_2010.jpg" scale=1 show_if=always x=200 y=30 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-150 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-150 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="You chose [yesc] as more symmetrical than [noc]" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please rate how much more you think [yesc] is more symmetrical than [noc]" x=0 y=280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more symmetrical                                               Much more symmetrical" x=0 y=350 z_index=0

define feedback instructions07
	set start_response_interval "no"
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Do you have any questions about the ratings?" x=0 y=-280 z_index=0
	draw image center=1 file="AK_R_2010.jpg" scale=1 show_if=always x=-200 y=30 z_index=0
	draw image center=1 file="SD_R_2010.jpg" scale=1 show_if=always x=200 y=30 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-150 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-150 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="You chose [yesc] as more symmetrical than [noc]" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please rate how much more you think [yesc] is more symmetrical than [noc]" x=0 y=280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=320 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more symmetrical                                               Much more symmetrical" x=0 y=350 z_index=0

define text_display instructions1
	set maxchar 60
	set foreground "black"
	set font_size 30
	set font_family "sans"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this experiment, we are investigating how people perceive faces of politicians.
	
	You will be shown pairs of pictures of real politicians who are running for office.
	
	Your task is to judge them on various facial attributes.
	
	Now, we will explain how this task works. Please press any key to continue
	__end__
	set background "#C0C0C0"
	set align "center"

define sketchpad instructions3
	set start_response_interval "no"
	set duration "keypress"
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="You will see a screen like this" x=0 y=-280 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think appears more symmetrical" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="If you think candidate X looks more symmetrical, push the keyboard button marked Candidate X" x=0 y=-250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="However, if you think candidate Y looks more symmetrical, push the button marked Candidate Y" x=0 y=-220 z_index=0
	draw image center=1 file="AK_R_2010.jpg" scale=1 show_if=always x=-200 y=30 z_index=0
	draw image center=1 file="SD_R_2010.jpg" scale=1 show_if=always x=200 y=30 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-150 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-150 z_index=0

define keyboard_response keyboard_response
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define feedback new_feedback
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define keyboard_response new_keyboard_response_1
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"

define logger new_logger
	set description "Logs experimental data"
	set auto_log "yes"

define text_display partyInstructions
	set maxchar 60
	set foreground "black"
	set font_size 16
	set font_family "mono"
	set duration "keypress"
	set description "Presents a display consisting of text"
	set content "You have completed this part of the study. Please get your experimenter to continue."
	set background "white"
	set align "center"

define keyboard_response trustFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define text_display trustInstructions
	set maxchar 50
	set foreground "black"
	set font_size 18
	set font_family "mono"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this part of the experiment, your task is to rate which candidate looks more trustworthy.
	
	If you have any questions about this part of the experiment, please ask your experimenter now.
	
	If you are ready to begin, please press any key to continue.
	__end__
	set background "white"
	set align "center"

define form_text_display trustInstructions_1
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	In this part of the experiment, your task is to rate which candidate looks more trustworthy.
	
	If you have any questions about this part of the experiment, please ask your experimenter now.
	
	If you are ready to begin, please click below to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response trustRC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define feedback trustScale
	set start_response_interval "yes"
	set reset_variables "yes"
	set duration 0
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="You chose Candidate X as more trustworthy than Candidate Y" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="Please rate how much more you think Candidate X is more trustworthy than Candidate Y" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="You chose Candidate Y as more trustworthy than Candidate X" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="Please rate how much more you think Candidate Y is more trustworthy than Candidate X" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more trustworthy                                Much more trustworthy" x=0 y=280 z_index=0

define sketchpad trust_choose
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you think looks more trustworthy" x=0 y=250 z_index=0

define logger trust_log
	set use_quotes "yes"
	set unicode "no"
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	log facel
	log facer
	log response_trustFC
	log response_time_trustFC
	log response_trustRC
	log response_time_trustRC
	log winner

define loop trust_rate
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "trust_sequence"
	set description "Repeatedly runs another item"
	set cycles 39
	set column_order "facel;facer;winner"
	set break_if "never"
	setcycle 0 facel "NC_1_2014_R_Ola_Lewis.jpg"
	setcycle 0 winner "R"
	setcycle 0 facer "NC_1_2014_R_Mark_Martin.jpg"
	setcycle 1 facel "NC_2_2014_D_robert_hunter_jr.jpg"
	setcycle 1 winner "R"
	setcycle 1 facer "NC_1_2014_sam_ervin.jpg"
	setcycle 2 facel "NC_3_2014_R_michael_robinson.jpg"
	setcycle 2 winner "R"
	setcycle 2 facer "NC_3_2014_D_cheri_beasley.jpg"
	setcycle 3 facel "NC_4_2014_R_eric_levison.jpg"
	setcycle 3 winner "R"
	setcycle 3 facer "NC_4_2014_D_robin_hudson.jpg"
	setcycle 4 facel "OH_1_2014_D_john_o'donnell.jpg"
	setcycle 4 winner "R"
	setcycle 4 facer "OH_1_2014__Rjudith_french.jpg"
	setcycle 5 facel "OH_2_2014_D_tom_letson.jpg"
	setcycle 5 winner "R"
	setcycle 5 facer "OH_3_2014_R_sharon_kennedy.jpg"
	setcycle 6 facel "TX_1_2014_D_william_moody.jpg"
	setcycle 6 winner "R"
	setcycle 6 facer "TX_1_2014_R_nathan_hecht.jpg"
	setcycle 7 facel "TX_2_2014-D_Lawrence Meyers.jpg"
	setcycle 7 winner "R"
	setcycle 7 facer "TX_2_2014_R_jeff_brown.jpg"
	setcycle 8 facel "TX_3_2014_D_gina_benavides.jpg"
	setcycle 8 winner "R"
	setcycle 8 facer "TX_3_2014_R_jeff_boyd.jpg"
	setcycle 9 facel "TX_4_2014_I_john_granberg.jpg"
	setcycle 9 winner "R"
	setcycle 9 facer "TX_5_2014_R_bert_richardson.jpg"
	setcycle 10 facel "TX_6_2014_I_quanah_parker.jpg"
	setcycle 10 winner "R"
	setcycle 10 facer "TX_6_2014_R_kevin_yeary.jpg"
	setcycle 11 facel "TX_7_2014_I_william_strange.jpg"
	setcycle 11 winner "R"
	setcycle 11 facer "TX_7_2014_R_david_newell.jpg"
	setcycle 12 facel "AR_1_2014_tim_cullen.jpg"
	setcycle 12 winner "R"
	setcycle 12 facer "AR_1_2014_robin_wynne.jpg"
	setcycle 13 facel "ID_1_2014_william_seiniger.jpg"
	setcycle 13 winner "R"
	setcycle 13 facer "ID_1_2014_joel_horton.jpg"
	setcycle 14 facel "MN_1_2014_john_hancock.jpg"
	setcycle 14 winner "R"
	setcycle 14 facer "MN_1_2014_wilhelmina_wright.jpg"
	setcycle 15 facel "MN_2_2014_michelle_macdonald.jpg"
	setcycle 15 winner "R"
	setcycle 15 facer "MN_2_2014_david_lillehaug.jpg"
	setcycle 16 facel "MT_1_2014_david_herbert.jpg"
	setcycle 16 winner "R"
	setcycle 16 facer "MT_1_2014_james_rice.jpg"
	setcycle 17 facel "MT_2_2014_lawrence_vandyke.jpg"
	setcycle 17 winner "R"
	setcycle 17 facer "MT_2_2014_mike_wheat.jpg"
	setcycle 18 facel "KY_1_2012_janet_stumbo.jpg"
	setcycle 18 winner "R"
	setcycle 18 facer "KY_1_2012_will_scott.jpg"
	setcycle 19 facel "MI_1_2012_shelia_johnson.jpg"
	setcycle 19 winner "R"
	setcycle 19 facer "MI_1_2012_brian_zahra.jpg"
	setcycle 20 facel "MN_1_2012_lorie_gildea.jpg"
	setcycle 20 winner "L"
	setcycle 20 facer "MN_1_2012_dan_griffith.jpg"
	setcycle 21 facel "MN_2_2012_barry_anderson.jpg"
	setcycle 21 winner "L"
	setcycle 21 facer "MN_2_2012_dean_barkley.jpg"
	setcycle 22 facel "MS_1_2012_josiah_coleman.jpg"
	setcycle 22 winner "L"
	setcycle 22 facer "MS_1_2012_richard_phillips.jpg"
	setcycle 23 facel "MS_2_2012_mike_randolph.jpg"
	setcycle 23 winner "L"
	setcycle 23 facer "MS_2_2012_talmadge_braddock.jpg"
	setcycle 24 facel "MT_1_2012_laurie_mckinnon.jpg"
	setcycle 24 winner "L"
	setcycle 24 facer "MT_1_2012_ed_sheehy.jpg"
	setcycle 25 facel "NM_1_2012_barbara_vigil.jpg"
	setcycle 25 winner "L"
	setcycle 25 facer "NM_1_2012_paul_kennedy.jpg"
	setcycle 26 facel "NC_1_2012_paul_newby.jpg"
	setcycle 26 winner "L"
	setcycle 26 facer "NC_1_2012_sam_ervin.jpg"
	setcycle 27 facel "OH_1_2012_R_terrence_o'donnell.jpg"
	setcycle 27 winner "L"
	setcycle 27 facer "OH_1_2012_D_mike_skindell.jpg"
	setcycle 28 facel "OH_2_2012_D_william_o'neill.jpg"
	setcycle 28 winner "L"
	setcycle 28 facer "OH_2_2012_R_robert_cupp.jpg"
	setcycle 29 facel "OH_3_2012_R_sharon_kennedy.jpg"
	setcycle 29 winner "L"
	setcycle 29 facer "OH_3_2012_D_yvette_brown.jpg"
	setcycle 30 facel "TX_2_2012_R_sharon_keller.jpg"
	setcycle 30 winner "L"
	setcycle 30 facer "TX_2_2012_D_keith_hampton.jpg"
	setcycle 31 facel "WA_1_2012_sheryl_mccloud.jpg"
	setcycle 31 winner "L"
	setcycle 31 facer "WA_1_2012_richard sanders.jpg"
	setcycle 32 facel "MI_2_2010_mary_kelley.jpg"
	setcycle 32 winner "L"
	setcycle 32 facer "MI_2_2010_alton_davis.jpg"
	setcycle 33 facel "MN_2_2010_alan_page.jpg"
	setcycle 33 winner "L"
	setcycle 33 facer "MN_2_2010_tim_tingelstad.jpg"
	setcycle 34 facel "MT_1_2010_beth_baker.jpg"
	setcycle 34 winner "L"
	setcycle 34 facer "MT_1_2010_nels_swandal.jpg"
	setcycle 35 facel "NC_1_2010_barbara_jackson.jpg"
	setcycle 35 winner "L"
	setcycle 35 facer "NC_1_2010_robert_hunter.jpg"
	setcycle 36 facel "OH_1_2010_R_maureen_o'connor.jpg"
	setcycle 36 winner "L"
	setcycle 36 facer "OH_1_2010_D_eric_brown.jpg"
	setcycle 37 facel "OH_2_2010_R_judith_lanzinger.jpg"
	setcycle 37 winner "L"
	setcycle 37 facer "OH_2_2010_D_mary_trapp.jpg"
	setcycle 38 facel "WA_1_2010_charlie_wiggins.jpg"
	setcycle 38 winner "L"
	setcycle 38 facer "WA_1_2010_richard sanders.jpg"
	run trust_sequence

define sequence trust_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run trust_choose always
	run trustFC always
	run inline_script always
	run trustScale always
	run trustRC always
	run trust_log always

define keyboard_response voteFC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "LEFT SHIFT"
	set allowed_responses "LEFT SHIFT;RIGHT SHIFT"

define text_display voteInstructions
	set maxchar 50
	set foreground "black"
	set font_size 18
	set font_family "mono"
	set duration "keypress"
	set description "Presents a display consisting of text"
	__content__
	In this next part of the experiment, your task is to choose which candidate you would be more likely to vote for.
	
	You will see both candidates and have to choose which candidate you would be more likely to vote for using the same responses in the previous part of the study.
	
	Following this, you will rate how much more likely you would be to vote for that candidate using a scale.
	__end__
	set background "white"
	set align "center"

define form_text_display voteInstructions_1
	set timeout "infinite"
	set spacing 10
	set rows "1;4;1"
	set only_render "no"
	set ok_text "Ok"
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	In this next part of the experiment, your task is to choose which candidate you would be more likely to vote for in a judicial election.
	
	You will see both candidates and have to choose which candidate you would be more likely to vote for using the same responses in the previous part of the study.
	
	Following this, you will rate how much more likely you would be to vote for that candidate using a scale.
	
	Please click below
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme "gray"
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define keyboard_response voteRC
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7"

define feedback voteScale
	set start_response_interval "yes"
	set reset_variables "yes"
	set duration 0
	set description "Provides feedback to the participant"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="You chose Candidate X" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 1" text="Please rate how much more you you would want to prefer to vote for Candidate X" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="You chose Candidate Y" x=0 y=190 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if="[comp_feed] = 0" text="Please rate how much more you you would want to prefer to vote for Candidate Y" x=0 y=220 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="1----------2----------3---------4----------5----------6----------7" x=0 y=250 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="A little more                                                Much more" x=0 y=280 z_index=0

define sketchpad vote_choose
	set start_response_interval "no"
	set duration 0
	set description "Displays stimuli"
	set background "#FFFFFF"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate X" x=-200 y=-300 z_index=0
	draw image center=1 file="[facel]" scale=1 show_if=always x=-200 y=-100 z_index=0
	draw image center=1 file="[facer]" scale=1 show_if=always x=200 y=-100 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Candidate Y" x=200 y=-300 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=16 html=yes show_if=always text="Please choose which candidate you would be more likely to vote for" x=0 y=250 z_index=0

define logger vote_log
	set use_quotes "yes"
	set unicode "no"
	set ignore_missing "yes"
	set description "Logs experimental data"
	set auto_log "no"
	log facel
	log facer
	log response_voteFC
	log response_time_voteFC
	log response_voteRC
	log response_time_voteRC
	log winner

define loop vote_rate
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "vote_sequence"
	set description "Repeatedly runs another item"
	set cycles 39
	set column_order "facel;facer;winner"
	set break_if "never"
	setcycle 0 facel "NC_1_2014_R_Ola_Lewis.jpg"
	setcycle 0 winner "R"
	setcycle 0 facer "NC_1_2014_R_Mark_Martin.jpg"
	setcycle 1 facel "NC_2_2014_D_robert_hunter_jr.jpg"
	setcycle 1 winner "R"
	setcycle 1 facer "NC_1_2014_sam_ervin.jpg"
	setcycle 2 facel "NC_3_2014_R_michael_robinson.jpg"
	setcycle 2 winner "R"
	setcycle 2 facer "NC_3_2014_D_cheri_beasley.jpg"
	setcycle 3 facel "NC_4_2014_R_eric_levison.jpg"
	setcycle 3 winner "R"
	setcycle 3 facer "NC_4_2014_D_robin_hudson.jpg"
	setcycle 4 facel "OH_1_2014_D_john_o'donnell.jpg"
	setcycle 4 winner "R"
	setcycle 4 facer "OH_1_2014__Rjudith_french.jpg"
	setcycle 5 facel "OH_2_2014_D_tom_letson.jpg"
	setcycle 5 winner "R"
	setcycle 5 facer "OH_3_2014_R_sharon_kennedy.jpg"
	setcycle 6 facel "TX_1_2014_D_william_moody.jpg"
	setcycle 6 winner "R"
	setcycle 6 facer "TX_1_2014_R_nathan_hecht.jpg"
	setcycle 7 facel "TX_2_2014-D_Lawrence Meyers.jpg"
	setcycle 7 winner "R"
	setcycle 7 facer "TX_2_2014_R_jeff_brown.jpg"
	setcycle 8 facel "TX_3_2014_D_gina_benavides.jpg"
	setcycle 8 winner "R"
	setcycle 8 facer "TX_3_2014_R_jeff_boyd.jpg"
	setcycle 9 facel "TX_4_2014_I_john_granberg.jpg"
	setcycle 9 winner "R"
	setcycle 9 facer "TX_5_2014_R_bert_richardson.jpg"
	setcycle 10 facel "TX_6_2014_I_quanah_parker.jpg"
	setcycle 10 winner "R"
	setcycle 10 facer "TX_6_2014_R_kevin_yeary.jpg"
	setcycle 11 facel "TX_7_2014_I_william_strange.jpg"
	setcycle 11 winner "R"
	setcycle 11 facer "TX_7_2014_R_david_newell.jpg"
	setcycle 12 facel "AR_1_2014_tim_cullen.jpg"
	setcycle 12 winner "R"
	setcycle 12 facer "AR_1_2014_robin_wynne.jpg"
	setcycle 13 facel "ID_1_2014_william_seiniger.jpg"
	setcycle 13 winner "R"
	setcycle 13 facer "ID_1_2014_joel_horton.jpg"
	setcycle 14 facel "MN_1_2014_john_hancock.jpg"
	setcycle 14 winner "R"
	setcycle 14 facer "MN_1_2014_wilhelmina_wright.jpg"
	setcycle 15 facel "MN_2_2014_michelle_macdonald.jpg"
	setcycle 15 winner "R"
	setcycle 15 facer "MN_2_2014_david_lillehaug.jpg"
	setcycle 16 facel "MT_1_2014_david_herbert.jpg"
	setcycle 16 winner "R"
	setcycle 16 facer "MT_1_2014_james_rice.jpg"
	setcycle 17 facel "MT_2_2014_lawrence_vandyke.jpg"
	setcycle 17 winner "R"
	setcycle 17 facer "MT_2_2014_mike_wheat.jpg"
	setcycle 18 facel "KY_1_2012_janet_stumbo.jpg"
	setcycle 18 winner "R"
	setcycle 18 facer "KY_1_2012_will_scott.jpg"
	setcycle 19 facel "MI_1_2012_shelia_johnson.jpg"
	setcycle 19 winner "R"
	setcycle 19 facer "MI_1_2012_brian_zahra.jpg"
	setcycle 20 facel "MN_1_2012_lorie_gildea.jpg"
	setcycle 20 winner "L"
	setcycle 20 facer "MN_1_2012_dan_griffith.jpg"
	setcycle 21 facel "MN_2_2012_barry_anderson.jpg"
	setcycle 21 winner "L"
	setcycle 21 facer "MN_2_2012_dean_barkley.jpg"
	setcycle 22 facel "MS_1_2012_josiah_coleman.jpg"
	setcycle 22 winner "L"
	setcycle 22 facer "MS_1_2012_richard_phillips.jpg"
	setcycle 23 facel "MS_2_2012_mike_randolph.jpg"
	setcycle 23 winner "L"
	setcycle 23 facer "MS_2_2012_talmadge_braddock.jpg"
	setcycle 24 facel "MT_1_2012_laurie_mckinnon.jpg"
	setcycle 24 winner "L"
	setcycle 24 facer "MT_1_2012_ed_sheehy.jpg"
	setcycle 25 facel "NM_1_2012_barbara_vigil.jpg"
	setcycle 25 winner "L"
	setcycle 25 facer "NM_1_2012_paul_kennedy.jpg"
	setcycle 26 facel "NC_1_2012_paul_newby.jpg"
	setcycle 26 winner "L"
	setcycle 26 facer "NC_1_2012_sam_ervin.jpg"
	setcycle 27 facel "OH_1_2012_R_terrence_o'donnell.jpg"
	setcycle 27 winner "L"
	setcycle 27 facer "OH_1_2012_D_mike_skindell.jpg"
	setcycle 28 facel "OH_2_2012_D_william_o'neill.jpg"
	setcycle 28 winner "L"
	setcycle 28 facer "OH_2_2012_R_robert_cupp.jpg"
	setcycle 29 facel "OH_3_2012_R_sharon_kennedy.jpg"
	setcycle 29 winner "L"
	setcycle 29 facer "OH_3_2012_D_yvette_brown.jpg"
	setcycle 30 facel "TX_2_2012_R_sharon_keller.jpg"
	setcycle 30 winner "L"
	setcycle 30 facer "TX_2_2012_D_keith_hampton.jpg"
	setcycle 31 facel "WA_1_2012_sheryl_mccloud.jpg"
	setcycle 31 winner "L"
	setcycle 31 facer "WA_1_2012_richard sanders.jpg"
	setcycle 32 facel "MI_2_2010_mary_kelley.jpg"
	setcycle 32 winner "L"
	setcycle 32 facer "MI_2_2010_alton_davis.jpg"
	setcycle 33 facel "MN_2_2010_alan_page.jpg"
	setcycle 33 winner "L"
	setcycle 33 facer "MN_2_2010_tim_tingelstad.jpg"
	setcycle 34 facel "MT_1_2010_beth_baker.jpg"
	setcycle 34 winner "L"
	setcycle 34 facer "MT_1_2010_nels_swandal.jpg"
	setcycle 35 facel "NC_1_2010_barbara_jackson.jpg"
	setcycle 35 winner "L"
	setcycle 35 facer "NC_1_2010_robert_hunter.jpg"
	setcycle 36 facel "OH_1_2010_R_maureen_o'connor.jpg"
	setcycle 36 winner "L"
	setcycle 36 facer "OH_1_2010_D_eric_brown.jpg"
	setcycle 37 facel "OH_2_2010_R_judith_lanzinger.jpg"
	setcycle 37 winner "L"
	setcycle 37 facer "OH_2_2010_D_mary_trapp.jpg"
	setcycle 38 facel "WA_1_2010_charlie_wiggins.jpg"
	setcycle 38 winner "L"
	setcycle 38 facer "WA_1_2010_richard sanders.jpg"
	run vote_sequence

define sequence vote_sequence
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run vote_choose always
	run voteFC always
	run inline_script always
	run voteScale always
	run voteRC always
	run vote_log always

